OpenViBE-Scenario

GDF file reader => #0
  Filename = C:/Work/OpenVibe/Emotions/leftRightImaginary-[2012.02.22-23.24.24].gdf
  Samples per buffer = 32
Signal=#0.EEG stream -> Signal display
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0.EEG stream -> Channel Selector
  Channel List = AF3; AF4
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #3
  Spatial Fitler Coefficients = 0.5;0.5
  Number of Output Channels = 1
  Number of Input Channels = 2
-> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #8
  Equation = log(1+x)
#3 -> Temporal filter - GPL
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #13
  Equation = log(1+x)
Input - A=#8, Input - B=#13 -> Simple DSP => #14
  Equation = B/A
Signal=#14 -> 0xc67a01dc Signal display "Arousal display"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
#0.EEG stream -> Reference Channel
  Channel = F3
  Channel Matching Method = Smart
-> Channel Selector
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #21
  Equation = log(1+x)
Signal=#21 -> Signal display "Valence display"
  Time Scale = 10
  Display Mode = Scan
  Manual Vertical Scale = false
  Vertical Scale = 100
