OpenViBE-Scenario

GDF file reader
  Filename = C:/Users/Esteve/Documents/Github/Play-Your-Mood/UI_v3/data/leftRightImaginary-[2012.02.22-23.24.24].gdf
  Samples per buffer = 32

Acquisition client => #1
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#1.Signal strea -> 0xc67a01dc Channel Selector Right Hemisphere
  Channel List = F4; Cz
  Action = Select
  Channel Matching Method = Smart
-> Reference Channel Cz => #3
  Channel = Cz
  Channel Matching Method = Smart
-> Temporal filter - GPL- ALPHA => #4
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "4_seconds_Window"
  Epoch 1 duration (in sec) = 4.0
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #8
  Equation = log(1+x)
#4 -> Time based epoching "20_seconds_Window"
  Epoch 1 duration (in sec) = 20.0
  Epoch 1 intervals (in sec) = 1.0
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #12
  Equation = log(1+x)
#3 -> Temporal filter - GPL- BETA => #13
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "4_seconds_Window"
  Epoch 1 duration (in sec) = 4.0
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #17
  Equation = log(1+x)
Input - A=#8, Input - B=#17 -> Simple DSP "BETA / ALPHA RIGHT Hemi 4''" => #18
  Equation = B/A
#13 -> Time based epoching "20_seconds_Window"
  Epoch 1 duration (in sec) = 20.0
  Epoch 1 intervals (in sec) = 1.0
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #22
  Equation = log(1+x)
Input - A=#12, Input - B=#22 -> Simple DSP "BETA / ALPHA RIGHT Hemi 20''" => #23
  Equation = B/A
-> Simple DSP => #24
  Equation = -0
#1.Signal strea -> Channel Selector Left Hemisphere
  Channel List = F3; Cz
  Action = Select
  Channel Matching Method = Smart
-> Reference Channel Cz => #26
  Channel = Cz
  Channel Matching Method = Smart
-> Temporal filter - GPL- ALPHA => #27
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 8.000000
  High cut frequency (Hz) = 12.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "4_seconds_Window"
  Epoch 1 duration (in sec) = 4.0
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #31
  Equation = log(1+x)
-> Matrix Display "TEST OUTPUTS"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#27 -> Time based epoching "20_seconds_Window"
  Epoch 1 duration (in sec) = 20.0
  Epoch 1 intervals (in sec) = 1.0
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #36
  Equation = log(1+x)
#26 -> Temporal filter - GPL- BETA => #37
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 4
  Low cut frequency (Hz) = 12.000000
  High cut frequency (Hz) = 28.000000
  Pass band ripple (dB) = 0.500000
-> Time based epoching "4_seconds_Window"
  Epoch 1 duration (in sec) = 4.0
  Epoch 1 intervals (in sec) = 0.1
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #41
  Equation = log(1+x)
Input - A=#31, Input - B=#41 -> Simple DSP "BETA / ALPHA LEFT Hemi 4''" => #42
  Equation = B/A
Input - A=#42, Input - B=#18 -> Simple DSP "Arousal_Left+Arousal_Right" => #43
  Equation = A + B
-> Matrix Display "Arousal 4'' Averaged"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input - A=#42, Input - B=#18 -> Simple DSP "Arousal_Left-Arousal_Right" => #45
  Equation = A - B
-> Matrix Display "Valence 4'' Averaged"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#42 -> Simple DSP => #47
  Equation = -0
Input 1=#43, Input 2=#45, Input 3=#47 -> Signal Merger => #48
-> Matrix Display "OUT 4""
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#48 -> TCP Writer
  Port = 5678
  Stimulus output = Raw
#37 -> Time based epoching "20_seconds_Window"
  Epoch 1 duration (in sec) = 20.0
  Epoch 1 intervals (in sec) = 1.0
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP => #54
  Equation = log(1+x)
Input - A=#36, Input - B=#54 -> Simple DSP "BETA / ALPHA LEFT Hemi 20''" => #55
  Equation = B/A
Input - A=#55, Input - B=#23 -> Simple DSP "Arousal_Left+Arousal_Right" => #56
  Equation = A + B
-> Matrix Display "Arousal 20'' Averaged"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input - A=#55, Input - B=#23 -> Simple DSP "Arousal_Left-Arousal_Right" => #58
  Equation = A - B
-> Matrix Display "Valence 20'' Averaged"
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Input 1=#56, Input 2=#58, Input 3=#24 -> Signal Merger => #60
-> Matrix Display "OUT 20""
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
#60 -> TCP Writer
  Port = 5679
  Stimulus output = Raw
#1.Signal strea -> Generic stream writer
  Filename = C:/Users/Esteve/Documents/Github/Play-Your-Mood/UI_v3/data/EEG_recordigs/recordEnobio-[$core{date}-$core{time}].ov
  Use compression = true
Experiment information=#1.Experiment information, Signal=#1.Signal strea, Stimulation=#1.Stimulations -> GDF file writer
  Filename = C:/Users/Esteve/Documents/Github/Play-Your-Mood/UI_v3/data/EEG_recordigs/recordEnobio-[$core{date}-$core{time}].gdf
